#!/bin/bash

#SBATCH -p compute
#SBATCH -J JOBNAME
#SBATCH -t 0-24:00:00
#SBATCH --nodes=2
#SBATCH --ntasks-per-node=64
#SBATCH --mail-user=cristobal.rodero_gomez@kcl.ac.uk
#SBATCH --mail-type=ALL

NPROC=128
source ${HOME}/.bashrc
export OMP_NUM_THREADS=1

solver_folder="/scratch/crg17/solver_files/resources"
meshes_folder="/scratch/crg17/meshes"
case_num=42HC
alpha_method=0
JOBNAME=
mech_mass_damping=0.1
mech_stiffness_damping=0.1
mech_rho_inf=0.0
################################################################################
# Execute simulation

mpiexec -np $NPROC $CARPENTRYDIR/carp.pt \
  +F $solver_folder/options/pt_ell_amg_large \
  +F $solver_folder/options/pt_para_amg_large \
  +F $solver_folder/options/pt_mech_amg_large \
  -ellip_use_pt 1 \
  -parab_use_pt 1 \
  -purk_use_pt 0 \
  -mech_use_pt 1 \
  -ellip_options_file $solver_folder/options/pt_ell_amg_large \
  -parab_options_file $solver_folder/options/pt_para_amg_large \
  -purk_options_file $solver_folder/petsc_options/mumps_opts_nonsymmetric \
  -mechanics_options_file $solver_folder/options/pt_mech_amg_large \
  -vectorized_fe 0 \
  -mech_finite_element 0 \
  -simID $JOBNAME \
  -meshname $meshes_folder/$case_num/heart_case$case_num"_800um" \
  -timedt 1.0 \
  -mechDT 1.0 \
  -spacedt 1 \
  -chkpt_intv 100 \
  -tend 800.0 \
  -loadStepping 50.0 \
  -num_mechanic_nbc 9 \
  -num_mechanic_bs 7 \
  -mechanic_bs[0].value 0.001 \
  -mechanic_bs[1].value 0.0 \
  -mechanic_bs[2].value 0.0 \
  -mechanic_bs[3].value 0.001 \
  -mechanic_bs[4].value 0.001 \
  -mechanic_bs[5].value 0.0 \
  -mechanic_nbc[0].name LSPV \
  -mechanic_nbc[0].surf_file $meshes_folder/$case_num/LS_pulm_vein \
  -mechanic_nbc[0].spring_idx 0 \
  -mechanic_nbc[1].name LIPV \
  -mechanic_nbc[1].surf_file $meshes_folder/$case_num/LI_pulm_vein \
  -mechanic_nbc[1].spring_idx 1 \
  -mechanic_nbc[2].name RIPV \
  -mechanic_nbc[2].surf_file $meshes_folder/$case_num/RI_pulm_vein \
  -mechanic_nbc[2].spring_idx 2 \
  -mechanic_nbc[3].name RSPV \
  -mechanic_nbc[3].surf_file $meshes_folder/$case_num/RS_pulm_vein \
  -mechanic_nbc[3].spring_idx 3 \
  -mechanic_nbc[4].name SVC \
  -mechanic_nbc[4].surf_file $meshes_folder/$case_num/SVC \
  -mechanic_nbc[4].spring_idx 4 \
  -mechanic_nbc[5].name IVC \
  -mechanic_nbc[5].surf_file $meshes_folder/$case_num/IVC \
  -mechanic_nbc[5].spring_idx 5 \
  -mechanic_nbc[6].name LV_endo \
  -mechanic_nbc[6].surf_file $meshes_folder/$case_num/LV_endo \
  -mechanic_nbc[6].pressure 1.6 \
  -mechanic_nbc[7].name RV_endo \
  -mechanic_nbc[7].surf_file $meshes_folder/$case_num/RV_endo \
  -mechanic_nbc[7].pressure 0.8 \
  -num_mechanic_ed 1 \
  -mechanic_ed[0].ncomp 1 \
  -mechanic_ed[0].file $meshes_folder/$case_num/PM_$case_num \
  -mechanic_bs[6].edidx 0 \
  -mechanic_bs[6].value 0.001 \
  -mechanic_nbc[8].name Pericardium \
  -mechanic_nbc[8].surf_file $meshes_folder/$case_num/epicardium_ventricles \
  -mechanic_nbc[8].spring_idx 6 \
  -mechanic_nbc[8].nspring_idx 0 \
  -mechanic_nbc[8].nspring_config 1 \
  -numSurfVols 4 \
  -surfVols[0].name LV_endo \
  -surfVols[0].surf_file $meshes_folder/$case_num/LV_endo \
  -surfVols[0].grid 8 \
  -surfVols[1].name RV_endo \
  -surfVols[1].surf_file $meshes_folder/$case_num/RV_endo \
  -surfVols[1].grid 8 \
  -surfVols[2].name LA_endo \
  -surfVols[2].surf_file $meshes_folder/$case_num/LA_endo \
  -surfVols[2].grid 8 \
  -surfVols[3].name RA_endo \
  -surfVols[3].surf_file $meshes_folder/$case_num/RA_endo \
  -surfVols[3].grid 8 \
  -CV_coupling 0 \
  -CV_FE_coupling 1 \
  -CVS_mode 0 \
  -num_cavities 2 \
  -cavities[0].cav_type 0 \
  -cavities[0].cavP 6 \
  -cavities[0].tube 2 \
  -cavities[0].cavVol 0 \
  -cavities[0].p0_cav 12.0 \
  -cavities[0].p0_in 12.0 \
  -cavities[0].p0_out 77.0 \
  -cavities[0].valve 0 \
  -cavities[0].state -1 \
  -lv_wk3.name Aorta \
  -lv_wk3.R1 0.03 \
  -lv_wk3.R2 0.63 \
  -lv_wk3.C 5.16 \
  -mitral_valve.Rfwd 0.05 \
  -mitral_valve.Rbwd 1000.0 \
  -aortic_valve.Rfwd 0.0 \
  -cavities[1].cav_type 1 \
  -cavities[1].cavP 7 \
  -cavities[1].tube 2 \
  -cavities[1].cavVol 1 \
  -cavities[1].p0_cav 6.0 \
  -cavities[1].p0_in 6.0 \
  -cavities[1].p0_out 17.4 \
  -cavities[1].valve 0 \
  -cavities[1].state -1 \
  -rv_wk3.name PA \
  -rv_wk3.R1 0.015 \
  -rv_wk3.R2 0.1008 \
  -rv_wk3.C 21.156 \
  -tricuspid_valve.Rfwd 0.05 \
  -tricuspid_valve.Rbwd 1000.0 \
  -pulmonic_valve.Rfwd 0.0 \
  -num_mregions 7 \
  -mregion[0].name "Ventricles" \
  -mregion[0].num_IDs 4 \
  -mregion[0].ID[0] 1 \
  -mregion[0].ID[1] 2 \
  -mregion[0].ID[2] 25 \
  -mregion[0].ID[3] 26 \
  -mregion[0].params "kappa=1000,b_f=8.0,b_fs=4.0,b_t=3.0,a=1.7" \
  -mregion[0].type 9 \
  -mregion[1].name "Atria" \
  -mregion[1].num_IDs 2 \
  -mregion[1].ID[0] 3 \
  -mregion[1].ID[1] 4 \
  -mregion[1].params "kappa=1000,c=7.45" \
  -mregion[1].type 2 \
  -mregion[2].name "Valve planes" \
  -mregion[2].num_IDs 4 \
  -mregion[2].ID[0] 7 \
  -mregion[2].ID[1] 8 \
  -mregion[2].ID[2] 9 \
  -mregion[2].ID[3] 10 \
  -mregion[2].params "kappa=1000,c=1000.0" \
  -mregion[2].type 2 \
  -mregion[3].name "Inlet planes" \
  -mregion[3].num_IDs 7 \
  -mregion[3].ID[0] 11 \
  -mregion[3].ID[1] 12 \
  -mregion[3].ID[2] 13 \
  -mregion[3].ID[3] 14 \
  -mregion[3].ID[4] 15 \
  -mregion[3].ID[5] 16 \
  -mregion[3].ID[6] 17 \
  -mregion[3].params "kappa=1000,c=1000.0" \
  -mregion[3].type 2 \
  -mregion[4].name "Aorta" \
  -mregion[4].num_IDs 1 \
  -mregion[4].ID[0] 5 \
  -mregion[4].params "kappa=1000,c=26.66" \
  -mregion[4].type 2 \
  -mregion[5].name "Pulm_Artery" \
  -mregion[5].num_IDs 1 \
  -mregion[5].ID[0] 6 \
  -mregion[5].params "kappa=1000,c=3.7" \
  -mregion[5].type 2 \
  -mregion[6].name "BC Veins" \
  -mregion[6].num_IDs 7 \
  -mregion[6].ID[0] 18 \
  -mregion[6].ID[1] 19 \
  -mregion[6].ID[2] 20 \
  -mregion[6].ID[3] 21 \
  -mregion[6].ID[4] 22 \
  -mregion[6].ID[5] 23 \
  -mregion[6].ID[6] 24 \
  -mregion[6].params "kappa=1000,c=7.45" \
  -mregion[6].type 2 \
  -mech_vol_split_aniso 1 \
  -volumeTracking 1 \
  -numElemVols 1 \
  -elemVols[0].name tissue \
  -elemVols[0].grid 8 \
  -pstrat 1 \
  -pstrat_i 1 \
  -krylov_tol_mech 1e-10 \
  -krylov_norm_mech 0 \
  -krylov_maxit_mech 5000 \
  -newton_atol_mech 1e-06 \
  -newton_tol_mech 1e-06 \
  -newton_adaptive_tol_mech 2 \
  -newton_tol_cvsys 1e-03 \
  -newton_line_search 0 \
  -newton_maxit_mech 20 \
  -num_stim 1 \
  -stimulus[0].stimtype 8 \
  -stimulus[0].data_file $meshes_folder/$case_num/$case_num"_vm_act_seq.dat" \
  -diffusionOn 0 \
  -num_imp_regions 3 \
  -imp_region[0].name ventricles \
  -veldep 0.0 \
  -imp_region[0].im Land \
  -imp_region[0].num_IDs 4 \
  -imp_region[0].ID[0] 1 \
  -imp_region[0].ID[1] 2 \
  -imp_region[0].ID[2] 25 \
  -imp_region[0].ID[3] 26 \
  -imp_region[1].name atria \
  -imp_region[1].im COURTEMANCHE \
  -imp_region[1].num_IDs 2 \
  -imp_region[1].ID[0] 3 \
  -imp_region[1].ID[1] 4 \
  -imp_region[2].name others \
  -imp_region[2].im PASSIVE \
  -imp_region[2].num_IDs 20 \
  -imp_region[2].ID[0] 5 \
  -imp_region[2].ID[1] 6 \
  -imp_region[2].ID[2] 7 \
  -imp_region[2].ID[3] 8 \
  -imp_region[2].ID[4] 9 \
  -imp_region[2].ID[5] 10 \
  -imp_region[2].ID[6] 11 \
  -imp_region[2].ID[7] 12 \
  -imp_region[2].ID[8] 13 \
  -imp_region[2].ID[9] 14 \
  -imp_region[2].ID[10] 15 \
  -imp_region[2].ID[11] 16 \
  -imp_region[2].ID[12] 17 \
  -imp_region[2].ID[13] 18 \
  -imp_region[2].ID[14] 19 \
  -imp_region[2].ID[15] 20 \
  -imp_region[2].ID[16] 21 \
  -imp_region[2].ID[17] 22 \
  -imp_region[2].ID[18] 23 \
  -imp_region[2].ID[19] 24 \
  -imp_region[0].im_sv_init /scratch/crg17/scripts/TT2_LandHumanStress_SS.sv \
  -imp_region[0].plugins LandHumanStress \
  -imp_region[0].plug_param "Tref=120.0,beta_0=2.3,beta_1=-2.4,dr=0.25,gamma=0.0085,gamma_wu=0.615,koff=0.1,ktm_unblock=1.0,perm50=0.35,phi=2.23,TOT_A=25.0,TRPN_n=2.0,wfrac=0.5" \
  -gridout_i 0 \
  -mech_output 1 \
  -strain_value 0 \
  -stress_value 0 \
  -mech_activate_inertia $alpha_method \
  -mass_lumping 1 \
  -mech_rho_inf $mech_rho_inf \
  -mech_stiffness_damping $mech_stiffness_damping \
  -mech_mass_damping $mech_mass_damping \
